PsychoPy2experiment version="2022.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1200, 700]
  expName = experimeno_bebidas
  keyboardBackend = ioHub
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Routines
  Routine inicio_instruccion
    CodeComponent conexion
      Code Type = Py
      Before Experiment:
        from psychopy import core, visual, event
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo(name='example_streme', type='Markers', channel_count=1,
                            channel_format='int32', source_id='example_stream_001')
        outlet = StreamOutlet(info)

        markers = {
            'jugo': [1],
            'refresco': [2],
            'leche': [3],
            'energetica': [4],
            'alcoholica': [5],
            'otrojugo': [6],
            'yogurt': [7],
            'cafe': [8],
            'malteada': [9],
            'agua': [11],
            'coca': [12],
            'hersheys': [13],
            'atole': [14],
            'valle': [16],
            'danone': [17],
            'michoacana': [18],
            'fresamalt': [19],
            'prueba': [98],
        }

        for _ in range(5):
            outlet.push_sample(markers['prueba'])
            print("marcador prueba")
            core.wait(0.5)
      Begin Experiment:
        win.setColor('white')
    TextComponent Instrucciones
      color = grey
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Aquí van las instrucciones del experimento
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mostrar_imagen
    CodeComponent primer_imagenes
      Code Type = Py
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      Before Experiment:
        path= r'C:\Users\Invitad@\Desktop\bebidas_azucaradas-master\bebidas'
        path2= r'C:\Users\Invitad@\Desktop\bebidas_azucaradas-master\bebidas_preguntas'
        list_of_images = []
        testcosaimg=[]
        list_of_images2 = []

        for root, dirs, files in os.walk(path):
            for file in files:
                list_of_images.append(os.path.join(root,file))
        shuffle(list_of_images)

        for root, dirs, files in os.walk(path):
            for file in files:
                testcosaimg.append(os.path.join(root,file))
        shuffle(testcosaimg)
        list_of_images.extend(testcosaimg)
        testcosaimg=[]

        for root, dirs, files in os.walk(path):
            for file in files:
                testcosaimg.append(os.path.join(root,file))
        shuffle(testcosaimg)
        list_of_images.extend(testcosaimg)

        for root, dirs, files in os.walk(path2):
            for file in files:
                list_of_images2.append(os.path.join(root,file))

        #shuffle(list_of_images)
        veces_rep=len(list_of_images)
        veces_rep2=len(list_of_images2)
      Begin Experiment:
        img_num = 0
      Begin Routine:
        imgg = list_of_images[img_num]
        img_num+=1
        if "1.-" in imgg:
            outlet.push_sample(markers['jugo'])
        if "2.-" in imgg:
            outlet.push_sample(markers['refresco'])
        if "3.-" in imgg:
            outlet.push_sample(markers['leche'])
        if "4.-" in imgg:
            outlet.push_sample(markers['energetica'])
        if "5.-" in imgg:
            outlet.push_sample(markers['alcoholica'])
        if "6.-" in imgg:
            outlet.push_sample(markers['otrojugo'])
        if "7.-" in imgg:
            outlet.push_sample(markers['yogurt'])
        if "8.-" in imgg:
            outlet.push_sample(markers['cafe'])
        if "9.-" in imgg:
            outlet.push_sample(markers['malteada'])
        if "11.+" in imgg:
            outlet.push_sample(markers['agua'])
        if "22.+" in imgg:
            outlet.push_sample(markers['coca'])
        if "33.+" in imgg:
            outlet.push_sample(markers['hersheys'])
        if "44.+" in imgg:
            outlet.push_sample(markers['atole'])
        if "66.+" in imgg:
            outlet.push_sample(markers['valle'])
        if "77.+" in imgg:
            outlet.push_sample(markers['danone'])
        if "88.+" in imgg:
            outlet.push_sample(markers['michoacana'])
        if "99.+" in imgg:
            outlet.push_sample(markers['fresamalt'])
    ImageComponent imagen
      image [set every repeat] = $imgg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent cruz
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1.0
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  Routine respuesta_imagen1
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        tr1.time = 0
        tr2.time = 0
        tr3.time = 0
        tr4.time = 0
        tr5.time = 0
        tr6.time = 0
        tr7.time = 0
        tr8.time = 0
        tr9.time = 0
      Each Frame:
        tr1.time = t
        tr2.time = t
        tr3.time = t
        tr4.time = t
        tr5.time = t
        tr6.time = t
        tr7.time = t
        tr8.time = t
        tr9.time = t
      End Routine:
        if len(mouse.clicked_name):
            thisExp.addData("clickedButtonName", mouse.clicked_name[-1])
            thisExp.addData("clickedButtonTime", mouse.clicked_time[-1])
            thisExp.nextEntry()
        else:
            thisExp.addData("clickedButtonName", None)
            thisExp.addData("clickedButtonTime", None)
    CodeComponent resp_imagen
      Code Type = Py
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      Begin Experiment:
        img_num1 = 0
      Begin Routine:
        imggg = list_of_images2[img_num1]
        img_num1+=1
    PolygonComponent cruz_img_resp1
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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    ImageComponent image_resp1
      image [set every repeat] = $imggg
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 2.0
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    ImageComponent image_triste_alegre
      image = escala/triste_alegre.jpeg
      size = (1,0.2)
      startVal [time (s)] = 4.0
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    PolygonComponent tr1
      fillColor = aqua
      lineColor = aqua
      pos = (-0.29, -0.05)
      shape = circle
      size = (0.04, 0.05)
      startVal [time (s)] = 4.0
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    PolygonComponent tr2
      fillColor = aqua
      lineColor = aqua
      pos = (-0.22, -0.05 )
      shape = circle
      size = (0.04, 0.05)
      startVal [time (s)] = 4
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    PolygonComponent tr3
      fillColor = aqua
      lineColor = aqua
      pos = (-0.15, -0.05 )
      shape = circle
      size = (0.04, 0.05)
      startVal [time (s)] = 4
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    PolygonComponent tr4
      fillColor = aqua
      lineColor = aqua
      pos = (-0.07, -0.05)
      shape = circle
      size = (0.04, 0.05)
      startVal [time (s)] = 4
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    PolygonComponent tr5
      fillColor = aqua
      lineColor = aqua
      pos = (0.01, -0.05)
      shape = circle
      size = (0.04, 0.05)
      startVal [time (s)] = 4
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    PolygonComponent tr6
      fillColor = aqua
      lineColor = aqua
      pos = (0.09, -0.05)
      shape = circle
      size = (0.04, 0.05)
      startVal [time (s)] = 4
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    PolygonComponent tr7
      fillColor = aqua
      lineColor = aqua
      pos = (0.16, -0.05)
      shape = circle
      size = (0.04, 0.05)
      startVal [time (s)] = 4
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    PolygonComponent tr8
      fillColor = aqua
      lineColor = aqua
      pos = (0.23, -0.05)
      shape = circle
      size = (0.04, 0.05)
      startVal [time (s)] = 4
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    PolygonComponent tr9
      fillColor = aqua
      lineColor = aqua
      pos = (0.31, -0.05)
      shape = circle
      size = (0.04, 0.05)
      startVal [time (s)] = 4
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    MouseComponent mouse
      clickable = tr1,tr2,tr3,tr4,tr5,tr6,tr7,tr8,tr9
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable = name, time
      saveStartStop = False
      startVal [time (s)] = 4
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  Routine respuesta_imagen2
    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        td1.time = 0
        td2.time = 0
        td3.time = 0
        td4.time = 0
        td5.time = 0
        td6.time = 0
        td7.time = 0
        td8.time = 0
        td9.time = 0
      Each Frame:
        td1.time = t
        td2.time = t
        td3.time = t
        td4.time = t
        td5.time = t
        td6.time = t
        td7.time = t
        td8.time = t
        td9.time = t
      End Routine:
        if len(mouse_2.clicked_name):
            thisExp.addData("clickedButtonName", mouse_2.clicked_name[-1])
            thisExp.addData("clickedButtonTime", mouse_2.clicked_time[-1])
            thisExp.nextEntry()
        else:
            thisExp.addData("clickedButtonName", None)
            thisExp.addData("clickedButtonTime", None)
    ImageComponent image_dependiente_independiente
      image = escala/dependiente_independiente.jpeg
      size = (1, 0.2)
      startVal [time (s)] = 0
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    PolygonComponent td1
      fillColor = aqua
      lineColor = aqua
      pos = (-0.285, -0.08)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent td2
      fillColor = aqua
      lineColor = aqua
      pos = (-0.212, -0.08)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent td3
      fillColor = aqua
      lineColor = aqua
      pos = (-0.145, -0.08)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent td4
      fillColor = aqua
      lineColor = aqua
      pos = (-0.065, -0.08)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent td5
      fillColor = aqua
      lineColor = aqua
      pos = (0.010, -0.08)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent td6
      fillColor = aqua
      lineColor = aqua
      pos = (0.090, -0.08)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent td7
      fillColor = aqua
      lineColor = aqua
      pos = (0.160, -0.08)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent td8
      fillColor = aqua
      lineColor = aqua
      pos = (0.239, -0.08)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent td9
      fillColor = aqua
      lineColor = aqua
      pos = (0.313, -0.08)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    MouseComponent mouse_2
      clickable = td1,td2,td3,td4,td5,td6,td7,td8,td9
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable = name, time
      startVal [time (s)] = 0
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  Routine respuesta_imagen3
    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        ta1.time = 0
        ta2.time = 0
        ta3.time = 0
        ta4.time = 0
        ta5.time = 0
        ta6.time = 0
        ta7.time = 0
        ta8.time = 0
        ta9.time = 0
      Each Frame:
        ta1.time = t
        ta2.time = t
        ta3.time = t
        ta4.time = t
        ta5.time = t
        ta6.time = t
        ta7.time = t
        ta8.time = t
        ta9.time = t
      End Routine:
        if len(mouse_3.clicked_name):
            thisExp.addData("clickedButtonName", mouse_3.clicked_name[-1])
            thisExp.addData("clickedButtonTime", mouse_3.clicked_time[-1])
            thisExp.nextEntry()
        else:
            thisExp.addData("clickedButtonName", None)
            thisExp.addData("clickedButtonTime", None)
    ImageComponent image_tranquilo_activo
      image = escala/tranquilo_activo.jpeg
      size = (1, 0.2)
      startVal [time (s)] = 0
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    PolygonComponent ta1
      fillColor = aqua
      lineColor = aqua
      pos = (-0.288, -0.07)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent ta2
      fillColor = aqua
      lineColor = aqua
      pos = (-0.216, -0.07)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent ta3
      fillColor = aqua
      lineColor = aqua
      pos = (-0.149, -0.07)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent ta4
      fillColor = aqua
      lineColor = aqua
      pos = (-0.068, -0.07)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent ta5
      fillColor = aqua
      lineColor = aqua
      pos = (0.007, -0.07)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent ta6
      fillColor = aqua
      lineColor = aqua
      pos = (0.087, -0.07)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent ta7
      fillColor = aqua
      lineColor = aqua
      pos = (0.157, -0.07)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent ta8
      fillColor = aqua
      lineColor = aqua
      pos = (0.233, -0.07)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent ta9
      fillColor = aqua
      lineColor = aqua
      pos = (0.306, -0.07)
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    MouseComponent mouse_3
      clickable = ta1,ta2,ta3,ta4,ta5,ta6,ta7,ta8,ta9
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable = name, time
      startVal [time (s)] = 0
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  Routine fin
    TextComponent fin_text
      color = grey
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Este es el final del experimento.

        Presiona la tecla espacio para finalizar.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instrucciones_2
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = instrucciones de la visualización
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine inicio_instruccion
  LoopInitiator imgse loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = veces_rep
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    Routine mostrar_imagen
  LoopTerminator imgse
  Routine Instrucciones_2
  LoopInitiator respuestas loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = veces_rep2
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    Routine respuesta_imagen1
    Routine respuesta_imagen2
    Routine respuesta_imagen3
  LoopTerminator respuestas
  Routine fin
